PsychoPy2experiment version="2023.1.3"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['stimuli/arrow.png', 'stimuli/arrow_transparent.png', 'stimuli/blank.jpg', 'stimuli/blank_transparent.png', 'stimuli/blank2.jpg', 'stimuli/card_0.PNG', 'stimuli/card_0_transparent.png', 'stimuli/card_10.PNG', 'stimuli/card_10_transparent.png', 'stimuli/card_100.PNG', 'stimuli/card_100_transparent.png', 'stimuli/card_circ.PNG', 'stimuli/card_circ_transparent.png', 'stimuli/card_pent.PNG', 'stimuli/card_pent_transparent.png', 'stimuli/card_sqr.PNG', 'stimuli/card_sqr_transparent.png', 'stimuli/card_star.PNG', 'stimuli/card_star_transparent.png', 'stimuli/card_tri.PNG', 'stimuli/card_tri_transparent.png']
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = 1.0000, 1.0000, 1.0000
  expName = slotMachine
  keyboardBackend = ioHub
  logging level = debug
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Routines
  Routine reward_reset
    CodeComponent code_reward_reset
      Code Type = Both
      Begin Experiment:
        block_reward = []
      Begin JS Experiment:
        block_reward = [];
      Begin JS Routine:
        util.shuffle(conditions);
        psychoJS.experiment.addData("conditions", conditions);
        currentCondition = conditions[0];
        psychoJS.experiment.addData("currentCondition", currentCondition);
        conditions.shift();
        psychoJS.experiment.addData("conditionsAfterRemoval", conditions);
        nCorr = 0;
        consRewardImgs = ["stimuli/blank_transparent.png", "stimuli/blank_transparent.png", "stimuli/blank_transparent.png", "stimuli/blank_transparent.png", "stimuli/blank_transparent.png"];
      Begin Routine:
        shuffle(conditions)
        thisExp.addData('conditions',conditions)
        #thisExp.nextEntry()

        currentCondition = conditions[0]
        thisExp.addData('currentCondition',currentCondition)
        #thisExp.nextEntry()

        conditions.remove(currentCondition) ## Check if this works
        thisExp.addData('conditionsAfterRemoval',conditions)
        #thisExp.nextEntry()

        nCorr = 0

        consRewardImgs = ["stimuli/blank_transparent.png", "stimuli/blank_transparent.png", "stimuli/blank_transparent.png", "stimuli/blank_transparent.png", "stimuli/blank_transparent.png"]
  Routine Block_break
    CodeComponent code_block_break
      Code Type = Both
      Begin JS Routine:
        psychoJS.experiment.addData("text_block_break.started", globalClock.getTime());
        block_reward.push(nCorr);
        blockMsg = (("Total reward for this day: " + nCorr.toString()) + "\n Next day starts soon");
      Begin Routine:
        thisExp.addData('text_block_break.started', globalClock.getTime())

        block_reward.append(nCorr)

        blockMsg = "Total reward for this day: " + str(nCorr) + "\n Next day starts soon"
    TextComponent text_block_break
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $blockMsg
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  Routine End_ins
    CodeComponent code
      Code Type = Both
      End Experiment:
        final_pay = randchoice(range(len(block_reward)))
        blockID = final_pay + 1

        #print("correct per block", block_correct)
        #print('block number: ', blockID)
        #print('You earned: ', block_correct[final_pay])
        thisExp.addData('reward_block_chosen', blockID)
      End JS Experiment:
        final_pay = util.randchoice(util.range(block_reward.length));
        blockID = (final_pay + 1);
        psychoJS.experiment.addData("reward_block_chosen", blockID);
    TextComponent text_end_ins
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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      text:
        You have successfully completed the task.

        Please let our researcher know.

        Thank you.
  Routine Main_Instruction
    CodeComponent code_main_instruction
      Code Type = Both
      Begin Experiment:
        nBlocks = 10
        nTrials = 15
        #reversalNo = 3
      Begin JS Experiment:
        nBlocks = 10;
        nTrials = 15;
      Begin JS Routine:
        psychoJS.experiment.addData("text_main_instruction.started", globalClock.getTime());
        psychoJS.experiment.addData("key_resp_main_instruction.started", globalClock.getTime());
      Begin Routine:
        #thisExp.addData('Main_Instruction_onset',t)
        #thisExp.nextEntry()
        thisExp.addData('text_main_instruction.started', globalClock.getTime())

        #conditions = [(12,20), (8,20), (7,20), (10,20), (7,14,20), (13,20)]
        thisExp.addData('key_resp_main_instruction.started', globalClock.getTime())
    TextComponent text_main_instruction
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Press one of the following arrows on the keyboard to select your slot machine

        LEFT, UP, RIGHT


        Press SPACE key to continue
    KeyboardComponent key_resp_main_instruction
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine slots_presentation
    CodeComponent Code_slots_presentation
      Code Type = Both
      Begin JS Routine:
        psychoJS.experiment.addData("key_resp_slots_presentation.started", globalClock.getTime());
        textMsg = ("Total reward: " + nCorr.toString());
        endMsg = " ";
        endTrial = false;
      Begin Routine:
        #routineTimer = core.CountdownTimer(8)
        #routineTimer.add(6.000000)
        thisExp.addData('key_resp_slots_presentation.started', globalClock.getTime())

        textMsg = "Total reward: " + str(nCorr)
        endMsg = " "

        endTrial = False
      Each Frame:
        if t>5.0 and len(key_resp_slots_presentation.getKeys()) == 0:
            endMsg = "Too Slow"
            endTrial = True
            if t>5.5 and len(key_resp_slots_presentation.getKeys()) == 0:
                continueRoutine = False
      Each JS Frame:
        if (((t > 5.0) && (key_resp_slots_presentation.getKeys().length === 0))) {
            endMsg = "Too Slow";
            endTrial = true;
            if (((t > 5.5) && (key_resp_slots_presentation.getKeys().length === 0))) {
                continueRoutine = false;
            }
        }
    ImageComponent card_circ_3
      image = $slotImageLocations[0]
      pos = cardPositions[0]
      saveStartStop = False
      size = card_size
      startVal [time (s)] = 0.0
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    ImageComponent card_pent_3
      image = $slotImageLocations[1]
      pos = cardPositions[1]
      saveStartStop = False
      size = card_size
      startVal [time (s)] = 0.0
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    ImageComponent card_sqr_3
      image = $slotImageLocations[2]
      pos = cardPositions[2]
      saveStartStop = False
      size = card_size
      startVal [time (s)] = 0.0
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    ImageComponent arrow
      image = stimuli/arrow_transparent.png
      pos = arrow_loc
      saveStartStop = False
      size = arrowSize
      startVal [time (s)] = 0.0
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    ImageComponent image_3
      image [set every repeat] = $consRewardImgs[4]
      pos [set every repeat] = consReward_pos[0]
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent image_6
      image [set every repeat] = $consRewardImgs[3]
      pos [set every repeat] = consReward_pos[1]
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent image_9
      image [set every repeat] = $consRewardImgs[2]
      pos [set every repeat] = consReward_pos[2]
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent image_12
      image [set every repeat] = $consRewardImgs[1]
      pos [set every repeat] = consReward_pos[3]
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent image_15
      image [set every repeat] = $consRewardImgs[0]
      pos [set every repeat] = consReward_pos[4]
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    TextComponent text_slots_presentation
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = textPosition
      startVal [time (s)] = 0.0
      text [set every repeat] = $textMsg
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    TextComponent text_slots_presentation_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text [set every frame] = $endMsg
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    PolygonComponent polygon_4
      fillColor = None
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 5
      opacity = 0.5
      pos = consReward_pos[0]
      saveStartStop = False
      shape = rectangle
      size = (0.17, 0.17)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_slots_presentation
      allowedKeys = '1','2','3','left','up','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine selection_interval
    CodeComponent Code_selection_interval
      Code Type = Both
      Begin JS Routine:
        if (endTrial) {
            continueRoutine = false;
        }
        presentationInterval = util.randchoice(intervalAfterSelection);
        psychoJS.experiment.addData("Main_presentationInterval", presentationInterval);
        if (((key_resp_slots_presentation.keys === keyboardNumbers[0]) || (key_resp_slots_presentation.keys === keyboardArrows[0]))) {
            boxPos = cardPositions[0];
        } else {
            if (((key_resp_slots_presentation.keys === keyboardNumbers[1]) || (key_resp_slots_presentation.keys === keyboardArrows[1]))) {
                boxPos = cardPositions[1];
            } else {
                if (((key_resp_slots_presentation.keys === keyboardNumbers[2]) || (key_resp_slots_presentation.keys === keyboardArrows[2]))) {
                    boxPos = cardPositions[2];
                }
            }
        }
      Begin Routine:
        if endTrial:
            continueRoutine = False

        presentationInterval = randchoice(intervalAfterSelection)

        thisExp.addData('Main_presentationInterval',presentationInterval)
        #thisExp.nextEntry()

        #presentationInterval = random.choice(intervalAfterSelection)

        #textMsg = "Reward obtained so far: " + str(nCorr)
        if key_resp_slots_presentation.keys == keyboardNumbers[0] or key_resp_slots_presentation.keys == keyboardArrows[0]:
            boxPos = cardPositions[0]
        elif key_resp_slots_presentation.keys == keyboardNumbers[1] or key_resp_slots_presentation.keys == keyboardArrows[1]:
            boxPos = cardPositions[1]
        elif key_resp_slots_presentation.keys == keyboardNumbers[2] or key_resp_slots_presentation.keys == keyboardArrows[2]:
            boxPos = cardPositions[2]
    ImageComponent card_circ_5
      image = $slotImageLocations[0]
      pos = cardPositions[0]
      saveStartStop = False
      size = card_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $presentationInterval
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    ImageComponent card_pent_5
      image = $slotImageLocations[1]
      pos = cardPositions[1]
      saveStartStop = False
      size = card_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $presentationInterval
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    ImageComponent card_sqr_5
      image = $slotImageLocations[2]
      pos = cardPositions[2]
      saveStartStop = False
      size = card_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $presentationInterval
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    ImageComponent arrow_2
      image = stimuli/arrow_transparent.png
      pos = arrow_loc
      saveStartStop = False
      size = arrowSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $presentationInterval
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    ImageComponent image_4
      image [set every repeat] = $consRewardImgs[4]
      pos [set every repeat] = consReward_pos[0]
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $presentationInterval
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    ImageComponent image_7
      image [set every repeat] = $consRewardImgs[3]
      pos [set every repeat] = consReward_pos[1]
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $presentationInterval
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    ImageComponent image_10
      image [set every repeat] = $consRewardImgs[2]
      pos [set every repeat] = consReward_pos[2]
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $presentationInterval
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    ImageComponent image_13
      image [set every repeat] = $consRewardImgs[1]
      pos [set every repeat] = consReward_pos[3]
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $presentationInterval
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    ImageComponent image_16
      image [set every repeat] = $consRewardImgs[0]
      pos [set every repeat] = consReward_pos[4]
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $presentationInterval
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    PolygonComponent polygon_selection_interval
      fillColor = -0.0667, 0.0667, 0.2000
      lineColor = 0.7255, -0.8431, -0.5294
      opacity = 0.5
      pos [set every repeat] = boxPos
      shape = rectangle
      size = card_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $presentationInterval
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    PolygonComponent polygon_5
      fillColor = None
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 5
      opacity = 0.5
      pos = consReward_pos[0]
      saveStartStop = False
      shape = rectangle
      size = (0.17, 0.17)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $presentationInterval
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    TextComponent text_selection_interval
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = textPosition
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $presentationInterval
      text [set every repeat] = $textMsg
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  Routine reward_presentation
    CodeComponent code_reward_presentation
      Code Type = Both
      Before Experiment:
        reward_seqs = []
      Before JS Experiment:
        var reward_seqs = [];
      Begin Experiment:
        '''
        shuffle(conditions)
        thisExp.addData('Main_conditions',conditions)
        thisExp.nextEntry()

        currentCondition = conditions[0]
        thisExp.addData('Main_currentCondition',currentCondition)
        thisExp.nextEntry()

        conditions.remove(currentCondition) ## Check if this works
        thisExp.addData('Main_conditionsAfterRemoval',conditions)
        thisExp.nextEntry()
        '''
        rewPos = [0,0]
        rewImg = "stimuli/blank_transparent.png"
      Begin JS Experiment:
        /*
        shuffle(conditions)
        thisExp.addData('Main_conditions',conditions)
        thisExp.nextEntry()

        currentCondition = conditions[0]
        thisExp.addData('Main_currentCondition',currentCondition)
        thisExp.nextEntry()

        conditions.remove(currentCondition) ## Check if this works
        thisExp.addData('Main_conditionsAfterRemoval',conditions)
        thisExp.nextEntry()*/
        var rewImg, rewPos;
        rewPos = [0, 0];
        rewImg = "stimuli/blank_transparent.png";
      Begin JS Routine:
        if (endTrial) {
            consRewardImgs.push("stimuli/blank_transparent.png");
            if ((consRewardImgs.length > 5)) {
                consRewardImgs.shift();
            }
            continueRoutine = false;
        } else {
            reward_seqs = DictCondRew[currentCondition];
            reward_seq = reward_seqs[0];
            /*
            for (var i, _pj_c = 0, _pj_a = enumerate(currentCondition), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                i = _pj_a[_pj_c];
                if (((main_trials.thisN + 1) > i[1])) {
                    reward_seqs = DictCondRew[currentCondition];
                    reward_seq = reward_seqs[(i[0] + 1)];
                }
            }
            */


            for (const [index, element] of currentCondition.entries()) {
                if (((main_trials.thisN + 1) > element)) {
                reward_seqs = DictCondRew[currentCondition];
                reward_seq = reward_seqs[(index + 1)];
                }
            }

            psychoJS.experiment.addData("Main_reward_seq", reward_seq);
            rand_val = Math.random();
            psychoJS.experiment.addData("Random value generated", rand_val);
            currentTrialReward = 0;
            x = util.index(reward_seq, 1);
            y = util.index(reward_seq, 2);
            z = util.index(reward_seq, 3);
            if (((key_resp_slots_presentation.keys === keyboardNumbers[x]) || (key_resp_slots_presentation.keys === keyboardArrows[x]))) {
                if ((rand_val >= 0.2)) {
                    currentTrialReward = 100;
                    nCorr += 100;
                    rewPos = rewardImagePostions[x];
                    rewImg = rewardImageLocations[0];
                } else {
                    if ((rand_val >= 0.1)) {
                        nCorr += 10;
                        currentTrialReward = 10;
                        rewPos = rewardImagePostions[x];
                        rewImg = rewardImageLocations[1];
                    } else {
                        currentTrialReward = 0;
                        nCorr += 0;
                        rewPos = rewardImagePostions[x];
                        rewImg = rewardImageLocations[2];
                    }
                }
            } else {
                if (((key_resp_slots_presentation.keys === keyboardNumbers[y]) || (key_resp_slots_presentation.keys === keyboardArrows[y]))) {
                    if ((rand_val >= 0.2)) {
                        currentTrialReward = 10;
                        nCorr += 10;
                        rewPos = rewardImagePostions[y];
                        rewImg = rewardImageLocations[1];
                    } else {
                        if ((rand_val >= 0.1)) {
                            currentTrialReward = 100;
                            nCorr += 100;
                            rewPos = rewardImagePostions[y];
                            rewImg = rewardImageLocations[0];
                        } else {
                            currentTrialReward = 0;
                            nCorr += 0;
                            rewPos = rewardImagePostions[y];
                            rewImg = rewardImageLocations[2];
                        }
                    }
                } else {
                    if (((key_resp_slots_presentation.keys === keyboardNumbers[z]) || (key_resp_slots_presentation.keys === keyboardArrows[z]))) {
                        if ((rand_val >= 0.2)) {
                            currentTrialReward = 0;
                            nCorr += 0;
                            rewPos = rewardImagePostions[z];
                            rewImg = rewardImageLocations[2];
                        } else {
                            if ((rand_val >= 0.1)) {
                                currentTrialReward = 10;
                                nCorr += 10;
                                rewPos = rewardImagePostions[z];
                                rewImg = rewardImageLocations[1];
                            } else {
                                currentTrialReward = 100;
                                nCorr += 100;
                                rewPos = rewardImagePostions[z];
                                rewImg = rewardImageLocations[0];
                            }
                        }
                    }
                }
            }
            psychoJS.experiment.addData("Main_reward_Img", rewImg);
            psychoJS.experiment.addData("Main_Cuml_rew", nCorr);
            psychoJS.experiment.addData("Main_currentTrialReward", currentTrialReward);
            consRewardImgs.push(rewImg);
            if ((consRewardImgs.length > 5)) {
                consRewardImgs.shift();
            }
        }
        textMsg = ("Total reward: " + nCorr.toString());
      Begin Routine:
        if endTrial:
            consRewardImgs.append('stimuli/blank_transparent.png')
            if len(consRewardImgs) > 5:
                del consRewardImgs[0]
            continueRoutine = False
        else:
            reward_seqs = DictCondRew[currentCondition]
            reward_seq = reward_seqs[0]
        #    thisExp.addData('Main_reward_seq',reward_seq)
        #    thisExp.nextEntry()

            for i in enumerate(currentCondition):
                if main_trials.thisN+1 > i[1]:
                    reward_seqs = DictCondRew[currentCondition]
                    reward_seq = reward_seqs[i[0]+1]
            thisExp.addData('Main_reward_seq',reward_seq)
            #thisExp.nextEntry()

            rand_val = random()
            thisExp.addData('Random value generated',rand_val)
            currentTrialReward = 0

            x = reward_seq.index(1)
            y = reward_seq.index(2)
            z = reward_seq.index(3)


            #Reward selection and presentation
            if key_resp_slots_presentation.keys == keyboardNumbers[x] or key_resp_slots_presentation.keys == keyboardArrows[x]:
        #        time = core.getTime()
                if rand_val >= 0.2:
                    currentTrialReward = 100
                    nCorr+= 100
                    rewPos = rewardImagePostions[x]
                    rewImg = rewardImageLocations[0]
                elif rand_val >= 0.1:
                    nCorr+= 10
                    currentTrialReward = 10
                    rewPos = rewardImagePostions[x]
                    rewImg = rewardImageLocations[1]
                else:
                    currentTrialReward = 0
                    nCorr+= 0
                    rewPos = rewardImagePostions[x]
                    rewImg = rewardImageLocations[2]

            elif key_resp_slots_presentation.keys == keyboardNumbers[y] or key_resp_slots_presentation.keys == keyboardArrows[y]:
        #        time = core.getTime()
                if rand_val >= 0.2:
                    currentTrialReward = 10
                    nCorr+= 10
                    rewPos = rewardImagePostions[y]
                    rewImg = rewardImageLocations[1]
                elif rand_val >= 0.1:
                    currentTrialReward = 100
                    nCorr+= 100
                    rewPos = rewardImagePostions[y]
                    rewImg = rewardImageLocations[0]
                else:
                    currentTrialReward = 0
                    nCorr+= 0
                    rewPos = rewardImagePostions[y]
                    rewImg = rewardImageLocations[2]

            elif key_resp_slots_presentation.keys == keyboardNumbers[z] or key_resp_slots_presentation.keys == keyboardArrows[z]:
        #        time = core.getTime()
                if rand_val >= 0.2:
                    currentTrialReward = 0
                    nCorr+= 0
                    rewPos = rewardImagePostions[z]
                    rewImg = rewardImageLocations[2]
                elif rand_val >= 0.1:
                    currentTrialReward = 10
                    nCorr+= 10
                    rewPos = rewardImagePostions[z]
                    rewImg = rewardImageLocations[1]
                else:
                    currentTrialReward = 100
                    nCorr+= 100
                    rewPos = rewardImagePostions[z]
                    rewImg = rewardImageLocations[0]

            thisExp.addData('Main_reward_Img',rewImg)
            #thisExp.nextEntry()
            thisExp.addData('Main_Cuml_rew',nCorr)
            #thisExp.nextEntry()
            thisExp.addData('Main_currentTrialReward',currentTrialReward)
            #thisExp.nextEntry()

            #Storing 5 consecutive reward images to display.
            consRewardImgs.append(rewImg)
            if len(consRewardImgs) > 5:
                del consRewardImgs[0]



        textMsg = "Total reward: " + str(nCorr) #+ "\nTrail number: " + str(practice_trials.thisN+1)
    ImageComponent card_circ_4
      image = $slotImageLocations[0]
      pos = cardPositions[0]
      saveStartStop = False
      size = card_size
      startVal [time (s)] = 0
      stopVal [duration (s)] = $rewardPresentationTime
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    ImageComponent card_pent_4
      image = $slotImageLocations[1]
      pos = cardPositions[1]
      saveStartStop = False
      size = card_size
      startVal [time (s)] = 0
      stopVal [duration (s)] = $rewardPresentationTime
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    ImageComponent card_sqr_4
      image = $slotImageLocations[2]
      pos = cardPositions[2]
      saveStartStop = False
      size = card_size
      startVal [time (s)] = 0
      stopVal [duration (s)] = $rewardPresentationTime
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    ImageComponent arrow_3
      image = stimuli/arrow_transparent.png
      pos = arrow_loc
      saveStartStop = False
      size = arrowSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $rewardPresentationTime
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    ImageComponent image_2
      image [set every repeat] = $rewImg
      pos [set every repeat] = rewPos
      saveStartStop = False
      size = rewardImageSize
      startVal [time (s)] = 0
      stopVal [duration (s)] = $rewardPresentationTime
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    ImageComponent image_5
      image [set every repeat] = $consRewardImgs[4]
      pos = consReward_pos[0]
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $rewardPresentationTime
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    ImageComponent image_8
      image [set every repeat] = $consRewardImgs[3]
      pos = consReward_pos[1]
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $rewardPresentationTime
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    ImageComponent image_11
      image [set every repeat] = $consRewardImgs[2]
      pos = consReward_pos[2]
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $rewardPresentationTime
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    ImageComponent image_14
      image [set every repeat] = $consRewardImgs[1]
      pos = consReward_pos[3]
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $rewardPresentationTime
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    ImageComponent image_17
      image [set every repeat] = $consRewardImgs[0]
      pos = consReward_pos[4]
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $rewardPresentationTime
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    PolygonComponent polygon_6
      fillColor = None
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 20
      opacity = 0.5
      pos = consReward_pos[0]
      saveStartStop = False
      shape = rectangle
      size = (0.17, 0.17)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $rewardPresentationTime
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    TextComponent text_reward_presentation
      color = 0.0039, 0.0039, -1.0000
      letterHeight = 0.05
      pos = textPosition
      startVal [time (s)] = 0
      stopVal [duration (s)] = $rewardPresentationTime
      text [set every repeat] = $textMsg
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  Routine practice_reset
    CodeComponent code_practice_reset
      Code Type = Both
      Before Experiment:
        card_size = [0.4, 0.4]
        cardPositions = [(-0.5, 0.2), (0, 0.2), (0.5, 0.2)]
        slotImageLocations = ["stimuli/card_circ_transparent.png", "stimuli/card_pent_transparent.png",
                              "stimuli/card_sqr_transparent.png", "stimuli/card_star_transparent.png",
                              "stimuli/card_tri_transparent.png"]

        textPosition = [0,-0.1]

        intervalAfterSelection = [0.5, 1, 1.5]

        arrowSize = [0.20, 0.20]
        arrow_loc = [0.50,-0.30]

        boxPos = [0,0]

        rewardImageSize = [0.30,0.25]
        rewardPresentationTime = 0.3
        rewardImagePostions = [(-0.530, 0.210), (-0.025, 0.210), (0.475, 0.210)]
        rewardImageLocations = ["stimuli/card_100_transparent.png", "stimuli/card_10_transparent.png",
                                "stimuli/card_0_transparent.png"]
        consReward_pos = [[0.2,-0.30],[0,-0.30],[-0.2,-0.30],[-0.4,-0.30],[-0.6,-0.30]]

        #conditions = [(12,20), (8,20), (7,20), (10,20), (7,14,20), (13,20)]
        #rewardSeq = [[[2,1,3],[2,3,1]],
        #             [[1,3,2],[3,2,1]],
        #             [[3,1,2],[1,2,3]],
        #             [[1,2,3],[3,2,1]],
        #             [[2,3,1],[2,1,3],[1,3,2]],
        #             [[3,2,1],[1,3,2]]]
        #DictCondRew = {(12,20): [[2,1,3],[2,3,1]],
        #                (8,20): [[1,3,2],[3,2,1]],
        #                (7,20): [[3,1,2],[1,2,3]],
        #                (10,20): [[1,2,3],[3,2,1]],
        #                (7,14,20): [[2,3,1],[2,1,3],[1,3,2]],
        #                (13,20):[[3,2,1],[1,3,2]]}
      Before JS Experiment:
        var card_size = [0.4, 0.4];
        var cardPositions = [[(- 0.5), 0.2], [0, 0.2], [0.5, 0.2]];
        var slotImageLocations = ["stimuli/card_circ_transparent.png", "stimuli/card_pent_transparent.png", "stimuli/card_sqr_transparent.png", "stimuli/card_star_transparent.png", "stimuli/card_tri_transparent.png"];
        var textPosition = [0, (- 0.1)];
        var intervalAfterSelection = [0.5, 1, 1.5];
        var arrowSize = [0.2, 0.2];
        var arrow_loc = [0.5, (- 0.3)];
        var boxPos = [0, 0];
        var rewardImageSize = [0.3, 0.25];
        var rewardPresentationTime = 0.3;
        var rewardImagePostions = [[(- 0.53), 0.21], [(- 0.025), 0.21], [0.475, 0.21]];
        var rewardImageLocations = ["stimuli/card_100_transparent.png", "stimuli/card_10_transparent.png", "stimuli/card_0_transparent.png"];
        var consReward_pos = [[0.2, (- 0.3)], [0, (- 0.3)], [(- 0.2), (- 0.3)], [(- 0.4), (- 0.3)], [(- 0.6), (- 0.3)]];
        var conditions = [[12, 20], [8, 20], [7, 20], [10, 20], [7, 14, 20], [13, 20]];
        var rewardSeq = [[[2, 1, 3], [2, 3, 1]], [[1, 3, 2], [3, 2, 1]], [[3, 1, 2], [1, 2, 3]], [[1, 2, 3], [3, 2, 1]], [[2, 3, 1], [2, 1, 3], [1, 3, 2]], [[3, 2, 1], [1, 3, 2]]];
        var DictCondRew = {[[12, 20]]: [[2, 1, 3], [2, 3, 1]], [[8, 20]]: [[1, 3, 2], [3, 2, 1]], [[7, 20]]: [[3, 1, 2], [1, 2, 3]], [[10, 20]]: [[1, 2, 3], [3, 2, 1]], [[7, 14, 20]]: [[2, 3, 1], [2, 1, 3], [1, 3, 2]], [[13, 20]]: [[3, 2, 1], [1, 3, 2]]};
      Begin Experiment:
        #block_reward = []
        #
        #conditions = [(12,20), (8,20), (7,20), (10,20), (7,14,20)]
        #
      Begin JS Experiment:
        /* Syntax Error: Fix Python code */
      Begin JS Routine:
        /*
        conditions = [(12,20), (8,20), (7,20), (10,20), (7,14,20), (13,20)]
        shuffle(conditions)
        thisExp.addData('conditions',conditions)
        thisExp.nextEntry()

        currentCondition = conditions[0]
        thisExp.addData('currentCondition',currentCondition)
        thisExp.nextEntry()

        conditions.remove(currentCondition) ## Check if this works
        thisExp.addData('conditionsAfterRemoval',conditions)
        thisExp.nextEntry()*/

        nCorr = 0;
        consRewardImgs = ["stimuli/blank_transparent.png", "stimuli/blank_transparent.png", "stimuli/blank_transparent.png", "stimuli/blank_transparent.png", "stimuli/blank_transparent.png"];
      Begin Routine:
        '''
        conditions = [(12,20), (8,20), (7,20), (10,20), (7,14,20), (13,20)]
        shuffle(conditions)
        thisExp.addData('conditions',conditions)
        thisExp.nextEntry()

        currentCondition = conditions[0]
        thisExp.addData('currentCondition',currentCondition)
        thisExp.nextEntry()

        conditions.remove(currentCondition) ## Check if this works
        thisExp.addData('conditionsAfterRemoval',conditions)
        thisExp.nextEntry()
        '''
        thisExp.addData('key_resp_practice_reset.started', globalClock.getTime())

        nCorr = 0

        consRewardImgs = ["stimuli/blank_transparent.png", "stimuli/blank_transparent.png", "stimuli/blank_transparent.png", "stimuli/blank_transparent.png", "stimuli/blank_transparent.png"]

        #thisExp.addData('key_resp_practice_reset.started', practice_resetClock.getTime())
    KeyboardComponent key_resp_practice_reset
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_slots
    CodeComponent Code_practice_slots
      Code Type = Both
      Begin JS Routine:
        psychoJS.experiment.addData("key_resp_practice_slots.started", globalClock.getTime());
        textMsg = ("Total reward: " + nCorr.toString());
        endMsg = " ";
        endTrial = false;
      Begin Routine:
        thisExp.addData('key_resp_practice_slots.started', globalClock.getTime())

        textMsg = "Total reward: " + str(nCorr)
        endMsg = " "

        endTrial = False
      Each Frame:
        if t > 5.0 and len(key_resp_practice_slots.getKeys()) == 0:
            endMsg = "Too slow"
            endTrial = True
            if t > 5.5 and len(key_resp_practice_slots.getKeys()) == 0:
                continueRoutine = False
      Each JS Frame:
        if (((t > 5.0) && (key_resp_practice_slots.getKeys().length === 0))) {
            endMsg = "Too slow";
            endTrial = true;
            if (((t > 5.5) && (key_resp_practice_slots.getKeys().length === 0))) {
                continueRoutine = false;
            }
        }
    ImageComponent card_circ
      image = $slotImageLocations[0]
      pos = cardPositions[0]
      saveStartStop = False
      size = card_size
      startVal [time (s)] = 0.0
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    ImageComponent card_pent
      image = $slotImageLocations[1]
      pos = cardPositions[1]
      saveStartStop = False
      size = card_size
      startVal [time (s)] = 0.0
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    ImageComponent card_sqr
      image = $slotImageLocations[2]
      pos = cardPositions[2]
      saveStartStop = False
      size = card_size
      startVal [time (s)] = 0.0
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    ImageComponent arrow_4
      image = stimuli/arrow_transparent.png
      pos = arrow_loc
      saveStartStop = False
      size = arrowSize
      startVal [time (s)] = 0.0
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    ImageComponent image
      image [set every repeat] = $consRewardImgs[4]
      pos [set every repeat] = consReward_pos[0]
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent image_18
      image [set every repeat] = $consRewardImgs[3]
      pos [set every repeat] = consReward_pos[1]
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent image_19
      image [set every repeat] = $consRewardImgs[2]
      pos [set every repeat] = consReward_pos[2]
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent image_20
      image [set every repeat] = $consRewardImgs[1]
      pos [set every repeat] = consReward_pos[3]
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent image_21
      image [set every repeat] = $consRewardImgs[0]
      pos [set every repeat] = consReward_pos[4]
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    TextComponent text_practice_slots
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = textPosition
      startVal [time (s)] = 0.0
      text [set every repeat] = $textMsg
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    TextComponent text_practice_slots_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text [set every frame] = $endMsg
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    PolygonComponent polygon
      fillColor = None
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 5
      opacity = 0.5
      pos = consReward_pos[0]
      saveStartStop = False
      shape = rectangle
      size = (0.17, 0.17)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_practice_slots
      allowedKeys = '1','2','3','left','up','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_interval
    CodeComponent Code_practice_interval
      Code Type = Both
      Begin JS Routine:
        if (endTrial) {
            continueRoutine = false;
        }
        presentationInterval = util.randchoice(intervalAfterSelection);
        psychoJS.experiment.addData("presentationInterval", presentationInterval);
        if (((key_resp_practice_slots.keys === keyboardNumbers[0]) || (key_resp_practice_slots.keys === keyboardArrows[0]))) {
            boxPos = cardPositions[0];
        } else {
            if (((key_resp_practice_slots.keys === keyboardNumbers[1]) || (key_resp_practice_slots.keys === keyboardArrows[1]))) {
                boxPos = cardPositions[1];
            } else {
                if (((key_resp_practice_slots.keys === keyboardNumbers[2]) || (key_resp_practice_slots.keys === keyboardArrows[2]))) {
                    boxPos = cardPositions[2];
                }
            }
        }
      Begin Routine:
        if endTrial:
            continueRoutine = False

        presentationInterval = randchoice(intervalAfterSelection)

        thisExp.addData('presentationInterval',presentationInterval)
        #thisExp.nextEntry()

        #presentationInterval = random.choice(intervalAfterSelection)

        if key_resp_practice_slots.keys == keyboardNumbers[0] or key_resp_practice_slots.keys == keyboardArrows[0]:
            boxPos = cardPositions[0]
        elif key_resp_practice_slots.keys == keyboardNumbers[1] or key_resp_practice_slots.keys == keyboardArrows[1]:
            boxPos = cardPositions[1]
        elif key_resp_practice_slots.keys == keyboardNumbers[2] or key_resp_practice_slots.keys == keyboardArrows[2]:
            boxPos = cardPositions[2]
    ImageComponent card_circ_6
      image = $slotImageLocations[0]
      pos = cardPositions[0]
      saveStartStop = False
      size = card_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $presentationInterval
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    ImageComponent card_pent_6
      image = $slotImageLocations[1]
      pos = cardPositions[1]
      saveStartStop = False
      size = card_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $presentationInterval
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    ImageComponent card_sqr_6
      image = $slotImageLocations[2]
      pos = cardPositions[2]
      saveStartStop = False
      size = card_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $presentationInterval
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    ImageComponent arrow_5
      image = stimuli/arrow_transparent.png
      pos = arrow_loc
      saveStartStop = False
      size = arrowSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $presentationInterval
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    ImageComponent image_22
      image [set every repeat] = $consRewardImgs[4]
      pos [set every repeat] = consReward_pos[0]
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $presentationInterval
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    ImageComponent image_23
      image [set every repeat] = $consRewardImgs[3]
      pos [set every repeat] = consReward_pos[1]
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $presentationInterval
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    ImageComponent image_24
      image [set every repeat] = $consRewardImgs[2]
      pos [set every repeat] = consReward_pos[2]
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $presentationInterval
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    ImageComponent image_25
      image [set every repeat] = $consRewardImgs[1]
      pos [set every repeat] = consReward_pos[3]
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $presentationInterval
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    ImageComponent image_26
      image [set every repeat] = $consRewardImgs[0]
      pos [set every repeat] = consReward_pos[4]
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $presentationInterval
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    TextComponent text_practice_interval
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = textPosition
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $presentationInterval
      text [set every repeat] = $textMsg
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    PolygonComponent polygon_2
      fillColor = None
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 5
      opacity = 0.5
      pos = consReward_pos[0]
      saveStartStop = False
      shape = rectangle
      size = (0.17, 0.17)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $presentationInterval
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    PolygonComponent polygon_practice_interval
      fillColor = -0.0667, 0.0667, 0.2000
      lineColor = 0.7255, -0.8431, -0.5294
      opacity = 0.5
      pos [set every repeat] = boxPos
      shape = rectangle
      size = card_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $presentationInterval
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  Routine practice_rewards
    CodeComponent code_practice_rewards
      Code Type = Both
      Before Experiment:
        joystickValues = [0,1,2]
        keyboardNumbers = ['1', '2', '3']
        keyboardArrows = ['left', 'up', 'right']
        reward_seq = []
        rand_val = 0
        currentTrialReward = 0
      Before JS Experiment:
        var joystickValues = [0, 1, 2];
        var keyboardNumbers = ["1", "2", "3"];
        var keyboardArrows = ["left", "up", "right"];
        var reward_seq = [];
        var rand_val = 0;
        var currentTrialReward = 0;
        var x, y, z;
      Begin Experiment:
        rewPos = [0,0]
        rewImg = "stimuli/blank_transparent.png"
      Begin JS Experiment:
        rewPos = [0, 0];
        rewImg = "stimuli/blank_transparent.png";
      Begin JS Routine:
        if (endTrial) {
            consRewardImgs.push("stimuli/blank_transparent.png");
            if ((consRewardImgs.length > 5)) {
                consRewardImgs.shift();
            }
            continueRoutine = false;
        } else {
            reward_seq = [2, 1, 3];
            psychoJS.experiment.addData("reward_seq", reward_seq);
            if (((practice_trials.thisN + 1) > 10)) {
                reward_seq = [3, 2, 1];
                psychoJS.experiment.addData("reward_seq", reward_seq);
            }
            rand_val = Math.random();
            currentTrialReward = 0;
            x = util.index(reward_seq, 1);
            y = util.index(reward_seq, 2);
            z = util.index(reward_seq, 3);
            if (((key_resp_practice_slots.keys === keyboardNumbers[x]) || (key_resp_practice_slots.keys === keyboardArrows[x]))) {
                if ((rand_val >= 0.2)) {
                    currentTrialReward = 100;
                    nCorr += 100;
                    rewPos = rewardImagePostions[x];
                    rewImg = rewardImageLocations[0];
                } else {
                    if ((rand_val >= 0.1)) {
                        currentTrialReward = 10;
                        nCorr += 10;
                        rewPos = rewardImagePostions[x];
                        rewImg = rewardImageLocations[1];
                    } else {
                        currentTrialReward = 0;
                        nCorr += 0;
                        rewPos = rewardImagePostions[x];
                        rewImg = rewardImageLocations[2];
                    }
                }
            } else {
                if (((key_resp_practice_slots.keys === keyboardNumbers[y]) || (key_resp_practice_slots.keys === keyboardArrows[y]))) {
                    if ((rand_val >= 0.2)) {
                        currentTrialReward = 10;
                        nCorr += 10;
                        rewPos = rewardImagePostions[y];
                        rewImg = rewardImageLocations[1];
                    } else {
                        if ((rand_val >= 0.1)) {
                            currentTrialReward = 100;
                            nCorr += 100;
                            rewPos = rewardImagePostions[y];
                            rewImg = rewardImageLocations[0];
                        } else {
                            currentTrialReward = 0;
                            nCorr += 0;
                            rewPos = rewardImagePostions[y];
                            rewImg = rewardImageLocations[2];
                        }
                    }
                } else {
                    if (((key_resp_practice_slots.keys === keyboardNumbers[z]) || (key_resp_practice_slots.keys === keyboardArrows[z]))) {
                        if ((rand_val >= 0.2)) {
                            currentTrialReward = 0;
                            nCorr += 0;
                            rewPos = rewardImagePostions[z];
                            rewImg = rewardImageLocations[2];
                        } else {
                            if ((rand_val >= 0.1)) {
                                currentTrialReward = 10;
                                nCorr += 10;
                                rewPos = rewardImagePostions[z];
                                rewImg = rewardImageLocations[1];
                            } else {
                                currentTrialReward = 100;
                                nCorr += 100;
                                rewPos = rewardImagePostions[z];
                                rewImg = rewardImageLocations[0];
                            }
                        }
                    }
                }
            }
            psychoJS.experiment.addData("reward_Img", rewImg);
            psychoJS.experiment.addData("Cuml_rew", nCorr);
            psychoJS.experiment.addData("currentTrialReward", currentTrialReward);
            consRewardImgs.push(rewImg);
            if ((consRewardImgs.length > 5)) {
                consRewardImgs.shift();
            }
        }
        textMsg = ("Total reward: " + nCorr.toString());
      Begin Routine:
        if endTrial:
            consRewardImgs.append('stimuli/blank_transparent.png')
            if len(consRewardImgs) > 5:
                del consRewardImgs[0]
            continueRoutine = False
        else:
        #    reward_seqs = DictCondRew[currentCondition]
        #    reward_seq = reward_seqs[0]
            reward_seq = [2, 1, 3]
            thisExp.addData('reward_seq',reward_seq)
            #thisExp.nextEntry()

        #    for i in enumerate(currentCondition):
            if practice_trials.thisN+1 > 10:
        #        reward_seqs = DictCondRew[currentCondition]
                reward_seq = [3,2,1]
                thisExp.addData('reward_seq',reward_seq)
        #        thisExp.nextEntry()

            rand_val = random()
            currentTrialReward = 0

            x = reward_seq.index(1)
            y = reward_seq.index(2)
            z = reward_seq.index(3)

            #reward_seq[0]-1

            #Reward selection and presentation
            if key_resp_practice_slots.keys == keyboardNumbers[x] or key_resp_practice_slots.keys == keyboardArrows[x]:
                #time = core.getTime()
                if rand_val >= 0.2:
                    currentTrialReward = 100
                    nCorr+= 100
                    rewPos = rewardImagePostions[x]
                    rewImg = rewardImageLocations[0]
                elif rand_val >= 0.1:
                    currentTrialReward = 10
                    nCorr+= 10
                    rewPos = rewardImagePostions[x]
                    rewImg = rewardImageLocations[1]
                else:
                    currentTrialReward = 0
                    nCorr+= 0
                    rewPos = rewardImagePostions[x]
                    rewImg = rewardImageLocations[2]

            elif key_resp_practice_slots.keys == keyboardNumbers[y] or key_resp_practice_slots.keys == keyboardArrows[y]:
                #time = core.getTime()
                if rand_val >= 0.2:
                    currentTrialReward = 10
                    nCorr+= 10
                    rewPos = rewardImagePostions[y]
                    rewImg = rewardImageLocations[1]
                elif rand_val >= 0.1:
                    currentTrialReward = 100
                    nCorr+= 100
                    rewPos = rewardImagePostions[y]
                    rewImg = rewardImageLocations[0]
                else:
                    currentTrialReward = 0
                    nCorr+= 0
                    rewPos = rewardImagePostions[y]
                    rewImg = rewardImageLocations[2]

            elif key_resp_practice_slots.keys == keyboardNumbers[z] or key_resp_practice_slots.keys == keyboardArrows[z]:
                #time = core.getTime()
                if rand_val >= 0.2:
                    currentTrialReward = 0
                    nCorr+= 0
                    rewPos = rewardImagePostions[z]
                    rewImg = rewardImageLocations[2]
                elif rand_val >= 0.1:
                    currentTrialReward = 10
                    nCorr+= 10
                    rewPos = rewardImagePostions[z]
                    rewImg = rewardImageLocations[1]
                else:
                    currentTrialReward = 100
                    nCorr+= 100
                    rewPos = rewardImagePostions[z]
                    rewImg = rewardImageLocations[0]

            thisExp.addData('reward_Img',rewImg)
            #thisExp.nextEntry()
            thisExp.addData('Cuml_rew',nCorr)
            #thisExp.nextEntry()
            thisExp.addData('currentTrialReward',currentTrialReward)
            #thisExp.nextEntry()

            #Storing 5 consecutive reward images to display.
            consRewardImgs.append(rewImg)
            if len(consRewardImgs) > 5:
                del consRewardImgs[0]



        textMsg = "Total reward: " + str(nCorr) #+ "\nTrail number: " + str(practice_trials.thisN+1)
    ImageComponent card_circ_7
      image = $slotImageLocations[0]
      pos = cardPositions[0]
      saveStartStop = False
      size = card_size
      startVal [time (s)] = 0
      stopVal [duration (s)] = $rewardPresentationTime
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    ImageComponent card_pent_7
      image = $slotImageLocations[1]
      pos = cardPositions[1]
      saveStartStop = False
      size = card_size
      startVal [time (s)] = 0
      stopVal [duration (s)] = $rewardPresentationTime
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    ImageComponent card_sqr_7
      image = $slotImageLocations[2]
      pos = cardPositions[2]
      saveStartStop = False
      size = card_size
      startVal [time (s)] = 0
      stopVal [duration (s)] = $rewardPresentationTime
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    ImageComponent arrow_6
      image = stimuli/arrow_transparent.png
      pos = arrow_loc
      saveStartStop = False
      size = arrowSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $rewardPresentationTime
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    ImageComponent image_27
      image [set every repeat] = $rewImg
      pos [set every repeat] = rewPos
      saveStartStop = False
      size = rewardImageSize
      startVal [time (s)] = 0
      stopVal [duration (s)] = $rewardPresentationTime
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    ImageComponent image_28
      image [set every repeat] = $consRewardImgs[4]
      pos = consReward_pos[0]
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $rewardPresentationTime
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    ImageComponent image_29
      image [set every repeat] = $consRewardImgs[3]
      pos = consReward_pos[1]
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $rewardPresentationTime
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    ImageComponent image_30
      image [set every repeat] = $consRewardImgs[2]
      pos = consReward_pos[2]
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $rewardPresentationTime
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    ImageComponent image_31
      image [set every repeat] = $consRewardImgs[1]
      pos = consReward_pos[3]
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $rewardPresentationTime
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    ImageComponent image_32
      image [set every repeat] = $consRewardImgs[0]
      pos = consReward_pos[4]
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $rewardPresentationTime
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    PolygonComponent polygon_3
      fillColor = None
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 20
      opacity = 0.5
      pos = consReward_pos[0]
      saveStartStop = False
      shape = rectangle
      size = (0.17, 0.17)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $rewardPresentationTime
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    TextComponent text_practice_rewards
      color = 0.0039, 0.0039, -1.0000
      letterHeight = 0.05
      pos = textPosition
      startVal [time (s)] = 0
      stopVal [duration (s)] = $rewardPresentationTime
      text [set every repeat] = $textMsg
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  Routine practice_end
    TextComponent text_practice_end
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You have successfully completed the practice.

        Now you are ready to start the game.

        Press SPACE key to contunue
    KeyboardComponent key_resp_practice_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Both
      Begin JS Routine:
        psychoJS.experiment.addData("key_resp_practice_end.started", globalClock.getTime());
      Begin Routine:
        thisExp.addData('key_resp_practice_end.started', globalClock.getTime())
  Routine Video_instruction
    MovieComponent video
      backend = moviepy
      forceEndRoutine = False
      movie = stimuli/Slot-Game-Tutorial-Video.mpeg
      size = [1.5, 0.85]
      startVal [time (s)] = 0.0
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    TextComponent text_video
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 60.0
      text = Press any key to continue.
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    KeyboardComponent key_resp_video
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction2
    TextComponent text_instruction2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        But there is something strange about these machines: they are malfunctioning!

        There is always a machine that grants many high rewards (most of the rounds 100 points, but sometimes only 10 or even 0). There is always a machine that grants many low rewards (mostly 10 points, sometimes 100 or 0), and a machine that grants no reward most of the rounds (mostly 0 points, sometimes 100 or 10).

        You have to find the appropriate machines to maximise your reward.

        Press any key to continue
    KeyboardComponent key_resp_instruction2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_instruction2
      Code Type = Both
      Begin JS Routine:
        psychoJS.experiment.addData("key_resp_instruction2.started", globalClock.getTime());
      Begin Routine:
        thisExp.addData('key_resp_instruction2.started', globalClock.getTime())
  Routine intro_video
    MovieComponent movie
      backend = ffpyplayer
      forceEndRoutine = True
      movie = stimuli/The Slot Machine Game_FINAL_3.29.23.mp4
      size = (0.9, 0.5)
      startVal [time (s)] = 0.0
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  Routine instruction1
    CodeComponent code_instruction1
      Code Type = Py
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      Begin Experiment:
        #nBlocks = 2
        nPracticeTrials = 15
        #reversalNo = 3
      Begin Routine:
        thisExp.addData('key_resp_instruction1.started', globalClock.getTime())
    TextComponent text_instruction1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to slot machine game.

        Imagine that you go to a casino to play with three slot machines for ten days. Each day you can play 15 rounds on any of these machines. Each round, you can select a machine and you will receive a reward.

        Press any key to continue
    KeyboardComponent key_resp_instruction1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction3
    TextComponent text_instruction3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Every day, the malfunctioning machines will be different and they also may or may not change within the same day. So the correct selection may become the wrong one after a while. You will have to adapt!

        The game takes approximately 10 minutes to complete and starts with a quick practice.

        Press the LEFT, UP or RIGHT arrows on the keyboard to select your slot machine.

        Press any key to continue.
    KeyboardComponent key_resp_instruction3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_instruction3
      Code Type = Both
      Begin JS Routine:
        psychoJS.experiment.addData("key_resp_instruction3.started", globalClock.getTime());
      Begin Routine:
        thisExp.addData('key_resp_instruction3.started', globalClock.getTime())
Flow
  Routine intro_video
  Routine instruction1
  Routine instruction2
  Routine instruction3
  LoopInitiator practice_blocks loopType="TrialHandler"
    loopType = sequential
    nReps = 2
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    Routine practice_reset
    LoopInitiator practice_trials loopType="TrialHandler"
      loopType = sequential
      nReps = nPracticeTrials
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      Routine practice_slots
      Routine practice_interval
      Routine practice_rewards
    LoopTerminator practice_trials
    Routine Block_break
  LoopTerminator practice_blocks
  Routine practice_end
  Routine Main_Instruction
  LoopInitiator block loopType="TrialHandler"
    loopType = sequential
    nReps = nBlocks
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    Routine reward_reset
    LoopInitiator main_trials loopType="TrialHandler"
      loopType = sequential
      nReps = nTrials
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      Routine slots_presentation
      Routine selection_interval
      Routine reward_presentation
    LoopTerminator main_trials
    Routine Block_break
  LoopTerminator block
  Routine End_ins
